PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = FINAL ASSIGNMENT
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent target
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5, random()-0.5)
      startVal [time (s)] = 0.0
      text = Z
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # number the of distractors

        n_distractors = 50
        distractors = []

        for i in range(n_distractors):
            distractor = visual.TextStim(win=win, name='distractor',
                text='S',
                font='Open Sans',
                pos=(random()-0.5, random()-0.5), height=0.05, wrapWidth=None, ori=0.0,
                color='white', colorSpace='rgb', opacity=None,
                languageStyle='LTR',
                depth=-1.0);

            distractors.append(distractor)

        for distractor in distractors:
            distractor.setAutoDraw(True)
      End Routine:
        for distractor in distractors:
            distractor.setAutoDraw(False)
    MouseComponent mouse
      clickable = target
      correctAns = 'target', 'Trial', 'DecisionTime', 'MotorResponseTime'
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        thisDecisionTime = None
        thisMotorResponseTime = None
      Each Frame:
        if targetLetter.status == STARTED and not thisDecisionTime:
            thisDecisionTime = core.getTime()

        if mouse.isPressedIn(Z):  # Assuming the target is a clickable region
            thisMotorResponseTime = core.getTime()
      End Routine:
        decision_time.append(thisDecisionTime)
        motor_response_time.append(thisMotorResponseTime)
Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
